CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>\d{8})_(?P<Sample>[A-Za-z0-9]+)_(?P<Treatment>[A-Za-z0-9]+)_(?P<Time>[A-Za-z0-9]+)_(?P<Position>[A-Za-z0-9]+)_(?P<Cell>[A-Za-z0-9]+)_(?P<Result>[A-Za-z0-9]+)_(?P<FrameNumber>[A-Za-z0-9]+)_(?P<Channel>[a-zA-Z0-9]+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:Apaf1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['']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
    Select the input image:Mask
    Name the output object:Mask_Objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

DilateObjects:[module_num:6|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
    Select the input object:Mask_Objects
    Name the output object:Dilated_Mask
    Structuring element:disk,60

IdentifyPrimaryObjects:[module_num:7|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notes:['primary objects = Mitochondria']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
    Select the input image:Mito
    Name the primary objects to be identified:Cell_mitochondria_1
    Typical diameter of objects, in pixel units (Min,Max):200,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
Smooth:[module_num:8|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
    Select the input image:Apaf1
    Name the output image:Apaf1_smooth
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Cell_mitochondria_1
    Name the objects to be identified:Cell_Apaf1
    Select the method to identify the secondary objects:Distance - B
    Select the input image:Apaf1_smooth
    Number of pixels by which to expand the primary objects:1000
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Apaf1
    Name the output image:Apaf1_smooth_Overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FDB20F
    Select objects to display:Cell_Apaf1

OverlayObjects:[module_num:11|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
    Input:Apaf1_smooth_Overlay
    Name the output image:Cell_Outline_and_Mask
    Objects:Dilated_Mask
    Opacity:0.3

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:Cell_Outline_and_Mask
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:\g<Date>_\g<Sample>_\g<Treatment>_\g<Time>_\g<Position>_\g<Cell>_\g<Result>__\g<FrameNumber>_MaskOverlay_ImageNumber
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/analysis_4/extracted_frames/20200227/DeathNoFoci/Results
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:13|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
    Parent objects:Dilated_Mask
    Child objects:Cell_Apaf1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:DeathNoFoci_Cell_interest
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
MeasureObjectIntensity:[module_num:14|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
    Select images to measure:Apaf1
    Select objects to measure:DeathNoFoci_Cell_interest

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/analysis_4/extracted_frames/20200227/DeathNoFoci/Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20210221_DeathNoFoci_intensity
    Overwrite existing files without warning?:Yes
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
DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:DeathNoFoci_Cell_interest
    Measurement to display:Intensity_IntegratedIntensity_Apaf1
    Select the image on which to display the measurements:Apaf1
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Times
    Use scientific notation?:No
    Font weight:normal

ConvertObjectsToImage:[module_num:17|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
    Select the input objects:DeathNoFoci_Cell_interest
    Name the output image:DeathNoFoci_Cell_of_Interest_Image
    Select the color format:Grayscale
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:DeathNoFoci_Cell_of_Interest_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:\g<Date>_\g<Sample>_\g<Treatment>_\g<Time>_\g<Position>_\g<Cell>_\g<Result>__\g<FrameNumber>_final_ImageNumber
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/analysis_4/extracted_frames/20200227/DeathNoFoci/Results
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
